PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=CTHKEUA5
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '', 'age': '', 'gender': '["male","female", "non-binary", "other"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/correct_out1.png', 'stimuli/correct_out2.png', 'stimuli/cue_a1.png', 'stimuli/cue_a2.png', 'stimuli/cue_a3.png', 'stimuli/cue_a4.png', 'stimuli/cue_a5.png', 'stimuli/cue_a6.png', 'stimuli/cue_a7.png', 'stimuli/cue_a8.png', 'stimuli/cue_b1.png', 'stimuli/cue_b2.png', 'stimuli/cue_b3.png', 'stimuli/cue_b4.png', 'stimuli/cue_b5.png', 'stimuli/cue_b6.png', 'stimuli/cue_b7.png', 'stimuli/cue_b8.png', 'stimuli/cue_c1.png', 'stimuli/cue_c2.png', 'stimuli/cue_c3.png', 'stimuli/cue_c4.png', 'stimuli/cue_c5.png', 'stimuli/cue_c6.png', 'stimuli/cue_c7.png', 'stimuli/cue_c8.png', 'stimuli/cue_d1.png', 'stimuli/cue_d2.png', 'stimuli/cue_d3.png', 'stimuli/cue_d4.png', 'stimuli/cue_d5.png', 'stimuli/cue_d6.png', 'stimuli/cue_d7.png', 'stimuli/cue_d8.png', 'stimuli/out1.png', 'stimuli/out2.png', 'stimuli/yellow_frame.png', 'instructions/debrief1.png', 'instructions/debrief2.png', 'instructions/debrief3.png', 'instructions/info1.png', 'instructions/info2.png', 'instructions/info3.png', 'instructions/task1_1.png', 'instructions/task1_2.png', 'instructions/task2.png', 'instructions/task3.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = UNM04_3
  keyboardBackend = ioHub
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Routines
  Routine cue_o__trial
    CodeComponent cue_random
      Code Type = Auto->JS
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      Begin Experiment:
        cues = ["stimuli/cue_a1.png", "stimuli/cue_a2.png", "stimuli/cue_a3.png", "stimuli/cue_a4.png", "stimuli/cue_a5.png", "stimuli/cue_a6.png", "stimuli/cue_a7.png", "stimuli/cue_a8.png"]
        distractors_vsubtle = ["stimuli/cue_b1.png", "stimuli/cue_b2.png", "stimuli/cue_b3.png", "stimuli/cue_b4.png", "stimuli/cue_b5.png", "stimuli/cue_b6.png", "stimuli/cue_b7.png", "stimuli/cue_b8.png"]
        distractors_subtle = ["stimuli/cue_c1.png", "stimuli/cue_c2.png", "stimuli/cue_c3.png", "stimuli/cue_c4.png", "stimuli/cue_c5.png", "stimuli/cue_c6.png", "stimuli/cue_c7.png", "stimuli/cue_c8.png"]
        distractors_nosubtle = ["stimuli/cue_d1.png", "stimuli/cue_d2.png", "stimuli/cue_d3.png", "stimuli/cue_d4.png", "stimuli/cue_d5.png", "stimuli/cue_d6.png", "stimuli/cue_d7.png", "stimuli/cue_d8.png"]
        order = [1, 2, 3, 4, 5, 6, 7, 8]
        shuffle (order)

        reorder_cues = [cues[i-1] for i in order]
        reorder_vsubtle = [distractors_vsubtle[i-1] for i in order]
        reorder_subtle = [distractors_subtle[i-1] for i in order]
        reorder_nosubtle = [distractors_nosubtle[i-1] for i in order]
      Begin Routine:
        if cue1 == 1:
            stim1 = reorder_cues[0]
        elif cue1 == 2:
            stim1 = reorder_cues[1]

        if cue2 == 5:
            stim2 = reorder_cues[4]
        elif cue2 == 6:
            stim2 = reorder_cues[5]
      End Routine:
        thisExp.addData("order", order)
    CodeComponent position
      Code Type = Auto->JS
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      Begin Routine:
        left_cue_pos = (-0.3, 0.2)
        right_cue_pos = (0.3, 0.2)
        left_out_pos = (-0.125, -0.2)
        right_out_pos = (0.125, -0.2)
        cue_positions = [left_cue_pos, right_cue_pos]
        out_positions = [left_out_pos, right_out_pos]
        shuffle(cue_positions)
        shuffle(out_positions)
      End Routine:
        thisExp.addData ('cue_order', cue_positions)
        thisExp.addData ('out_order', out_positions)
    TextComponent blank_training
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent predictive_cue
      image [set every repeat] = $stim1
      pos [set every repeat] = cue_positions[0]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    ImageComponent non_predictive_cue
      image [set every repeat] = $stim2
      pos [set every repeat] = cue_positions[1]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    ImageComponent o1_image
      image [set every repeat] = stimuli/out1.png
      pos [set every repeat] = out_positions[0]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    ImageComponent o2_image
      image [set every repeat] = stimuli/out2.png
      pos [set every repeat] = out_positions[1]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    MouseComponent cue_o_mouse
      clickable = o1_image, o2_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    CodeComponent correct_click
      Code Type = Auto->JS
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      Begin Routine:
        msg = '888'
        correct = 99
    CodeComponent timeout_code
      Code Type = Auto->JS
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      End Routine:
        if cue_o_mouse.isPressedIn(o1_image) or cue_o_mouse.isPressedIn(o2_image):
            feedback_reps = 1
        else:
            feedback_reps = 0
    TextComponent timeout_text
      color = red
      font = Trebuchet MS
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 1.0
      text = TIMEOUT - TOO SLOW
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  Routine information
    TextboxComponent continue_info
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent mouse_info
      clickable = continue_info
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image_info
      image [set every repeat] = $information
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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  Routine consent
    TextboxComponent c1
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, 0.35)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I agree to participate in the study on learning the predictive value of cues as described. I understand that my responses will be treated confidentially and that I have the option to withdraw from the study.
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    TextboxComponent c2
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, 0.20)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I understand my participation is completely voluntary.
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    TextboxComponent c3
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, 0.05)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I understand I have the right to withdraw from the study at any time during or at the end of the study without giving a reason and with no adverse consequences.
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    TextboxComponent c4
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, -0.125)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I have been given full information about what the study entails.
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    TextboxComponent c5
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, -0.25)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I have been given contact information for the research team.
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    TextboxComponent c6
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, -0.35)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I understand my responses will be fully anonymized.
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    SliderComponent slider_1
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, 0.35)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, 0.2)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, 0.05)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, -0.125)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_5
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, -0.25)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_6
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, -0.35)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    CodeComponent show_consent_code
      Code Type = Auto->JS
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      Begin Routine:
        show_consent = False
      Each Frame:
        s1 = slider_1.getRating()
        s2 = slider_2.getRating()
        s3 = slider_3.getRating()
        s4 = slider_4.getRating()
        s5 = slider_5.getRating()
        s6 = slider_6.getRating()

        if s1 is not None:
            if s2 is not None:
                if s3 is not None:
                    if s4 is not None:
                        if s5 is not None:
                            if s6 is not None:
                                show_consent = True
    MouseComponent mouse_consent
      clickable = consent_box
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = show_consent
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    TextboxComponent consent_box
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = show_consent
      text = CONTINUE
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    CodeComponent consent_code
      Code Type = Auto->JS
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      Begin Routine:
        consent = 0
      End Routine:
        res1 = slider_1.getRating()
        res2 = slider_2.getRating()
        res3 = slider_3.getRating()
        res4 = slider_4.getRating()
        res5 = slider_5.getRating()
        res6 = slider_6.getRating()

        if res1 == 1:
            if res2 == 1:
                if res3 == 1:
                    if res4 == 1:
                        if res5 == 1:
                            if res6 == 1:
                                consent = 1
                                no_consent = 0
                            else:
                                consent = 0
                                no_consent = 1
                        else:
                            consent = 0
                            no_consent = 1
                    else:
                        consent = 0
                        no_consent = 1
                else:
                    consent = 0
                    no_consent = 1
            else:
                consent = 0
                no_consent = 1
        else:
            consent = 0
            no_consent = 1
  Routine no_consent_trial
    TextboxComponent no_consent_textbox
      autoLog = False
      bold = True
      editable = False
      font = Trebuchet MS
      letterHeight = 0.03
      saveStartStop = False
      size = (0.65, 0.5)
      startVal [time (s)] = 0
      text = Thank you for considering our study. You did not consent to participate.
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    TextboxComponent exit_box
      autoLog = False
      bold = True
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0
      text = EXIT
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    MouseComponent mouse_exit
      clickable = exit_box
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0
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  Routine debrief
    TextboxComponent cont_debrief
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_debrief_mouse
      clickable = cont_debrief
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent debrief_image
      image [set every repeat] = $debrief_img
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if correct == 1:
            msg = 'CORRECT!'
            msg_color = [-1.0000, 1.0000, -1.0000]
        else:
            msg = 'INCORRECT!'
            msg_color = 'red'   #[1.0000, -1.0000, -1.0000]
    TextComponent feedback_text
      color [set every repeat] = $msg_color
      font = Trebuchet MS
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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    ImageComponent predictive_cue_feedback
      image [set every repeat] = $stim1
      pos [set every repeat] = cue_positions[0]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent non_predictive_cue_feedback
      image [set every repeat] = $stim2
      pos [set every repeat] = cue_positions[1]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent o1_image_feedback
      image [set every repeat] = $o1_feedback
      pos [set every repeat] = out_positions[0]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent o2_image_feedback
      image [set every repeat] = $o2_feedback
      pos [set every repeat] = out_positions[1]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine cue_selection
    CodeComponent clicked_outcome
      Code Type = Auto->JS
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      Begin Routine:
        if cue_o_mouse.clicked_name[0] == 'o1_image':
            yellow_frame_position = out_positions[0]
        else:
            yellow_frame_position = out_positions[1]
        if cue_o_mouse.clicked_name[0] == outcome:
            correct = 1
        else:
            correct = 0

        thisExp.addData('correct_answer', correct)
    ImageComponent predictive_cue_selection
      image [set every repeat] = $stim1
      pos [set every repeat] = cue_positions[0]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent non_predictive_cue_selection
      image [set every repeat] = $stim2
      pos [set every repeat] = cue_positions[1]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent o1_image_selection
      image [set every repeat] = stimuli/out1.png
      pos [set every repeat] = out_positions[0]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent o2_image_selection
      image [set every repeat] = stimuli/out2.png
      pos [set every repeat] = out_positions[1]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent yellow_frame
      image = stimuli/yellow_frame.png
      pos [set every repeat] = yellow_frame_position
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine counterbalance
    CodeComponent no_mobile_devices
      Code Type = JS
      Begin JS Experiment:
        if( /Android|webOS|iPhone|iPad|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
          quitPsychoJS('Mobile device detected. Goodbye!', false)
        }
  Routine test1_vsubtle_inst
    TextboxComponent cont_test1_vsubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_mouse_test1_vsubtle
      clickable = cont_test1_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent instructions_test1_vsubtle
      image [set every repeat] = $task2
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine test2_vsubtle_inst
    TextboxComponent cont_test2_vsubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_mouse_test2_vsubtle
      clickable = cont_test2_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent instructions_test2_vsubtle
      image [set every repeat] = $task3
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine test1_vsubtle_choice
    CodeComponent target_determination_test1_vsubtle
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            stim1 = reorder_cues[0]
        elif target == 2:
            stim1 = reorder_cues[1]
        elif target == 5:
            stim1 = reorder_cues[4]
        elif target == 6:
            stim1 = reorder_cues[5]
    CodeComponent distractor_presentation
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            distractor = reorder_vsubtle[0]
        elif target == 2:
            distractor = reorder_vsubtle[1]
        elif target == 5:
            distractor = reorder_vsubtle[4]
        elif target == 6:
            distractor = reorder_vsubtle[5]
    TextComponent blank_test1_vsubtle
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent target_test1_vsubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_test1_vsubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_test1_vsubtle
      clickable = target_test1_vsubtle, distractor_test1_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine test1_vsubtle_rate
    TextComponent slider_text_test1_vsubtle
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident are you of your response?
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    SliderComponent slider_test1_vsubtle
      borderColor = white
      color = white
      font = Trebuchet MS
      forceEndRoutine = False
      granularity = 0.5
      initVal = 5.5
      labels = "I am guessing", "I am certain"
      letterHeight = 0.028
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent slider_target_test1_vsubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent slider_distractor_test1_vsubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextboxComponent continue_rate_test1_vsubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = $show_continue
      text = CONTINUE
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    MouseComponent mouse_continue_test1_vsubtle
      clickable = continue_rate_test1_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent show_continue_rate
      Code Type = Auto->JS
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      Begin Routine:
        show_continue = False
      Each Frame:
        slid = slider_test1_vsubtle.getRating()

        if slid is not None:
            show_continue = True
  Routine test2_vsubtle_choice
    CodeComponent target_determination_2
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            stim1 = reorder_cues[0]
        elif target == 2:
            stim1 = reorder_cues[1]
        elif target == 5:
            stim1 = reorder_cues[4]
        elif target == 6:
            stim1 = reorder_cues[5]
    CodeComponent distractor_presentation_test2_vsubtle
      Code Type = Auto->JS
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      Begin Routine:
        if distractor_test2 == 1:
            distractor = reorder_vsubtle[0]
        elif distractor_test2 == 2:
            distractor = reorder_vsubtle[1]
        elif distractor_test2 == 5:
            distractor = reorder_vsubtle[4]
        elif distractor_test2 == 6:
            distractor = reorder_vsubtle[5]
    TextComponent blank_test2_vsubtle
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent target_test2_vsubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_test2_vsubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_test2_vsubtle
      clickable = target_test2_vsubtle, distractor_test2_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine test2_vsubtle_rate
    TextComponent slider_text_test2_vsubtle
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident are you of your response?
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    SliderComponent slider_test2_vsubtle
      borderColor = white
      color = white
      font = Trebuchet MS
      forceEndRoutine = False
      granularity = 0.5
      initVal = 5.5
      labels = "I am guessing", "I am certain"
      letterHeight = 0.028
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent slider_target_test2_vsubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent slider_distractor_test2_vsubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
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    CodeComponent show_continue_rate_test2_vsubtle
      Code Type = Auto->JS
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      Begin Routine:
        show_continue_test2_vsubtle = False
      Each Frame:
        slid2 = slider_test2_vsubtle.getRating()

        if slid2 is not None:
            show_continue_test2_vsubtle = True
    TextboxComponent continue_rate_test2_vsubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = show_continue_test2_vsubtle
      text = CONTINUE
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    MouseComponent mouse_continue_test2_vsubtle
      clickable = continue_rate_test2_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test1_subtle_inst
    TextboxComponent cont_test1_subtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_mouse_test1_subtle
      clickable = cont_test1_subtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent instructions_test1_subtle
      image [set every repeat] = $task2
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine test1_subtle_choice
    CodeComponent target_determination_test1_subtle
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            stim1 = reorder_cues[0]
        elif target == 2:
            stim1 = reorder_cues[1]
        elif target == 5:
            stim1 = reorder_cues[4]
        elif target == 6:
            stim1 = reorder_cues[5]
    CodeComponent distractor_presentation_test1_subtle
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            distractor = reorder_subtle[0]
        elif target == 2:
            distractor = reorder_subtle[1]
        elif target == 5:
            distractor = reorder_subtle[4]
        elif target == 6:
            distractor = reorder_subtle[5]
    TextComponent blank_test1_subtle
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent target_test1_subtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_test1_subtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_test1_subtle
      clickable = target_test1_subtle, distractor_test1_subtle
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine test1_subtle_rate
    TextComponent slider_text_test1_subtle
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident are you of your response?
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    SliderComponent slider_test1_subtle
      borderColor = white
      color = white
      font = Trebuchet MS
      forceEndRoutine = False
      granularity = 0.5
      initVal = 5.5
      labels = "I am guessing", "I am certain"
      letterHeight = 0.028
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent slider_target_test1_subtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent slider_distractor_test1_subtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent show_continue_rate_test1_subtle
      Code Type = Auto->JS
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      Begin Routine:
        show_continue_test1_subtle = False
      Each Frame:
        slid = slider_test1_subtle.getRating()

        if slid is not None:
            show_continue_test1_subtle = True
    TextboxComponent continue_rate_test1_subtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = show_continue_test1_subtle
      text = CONTINUE
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    MouseComponent mouse_continue_test1_subtle
      clickable = continue_rate_test1_subtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test2_subtle_inst
    TextboxComponent cont_test2_subtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_mouse_test2_subtle
      clickable = cont_test2_subtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent instructions_test2_subtle
      image [set every repeat] = $task3
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine test2_subtle_choice
    CodeComponent target_determination_test2_subtle
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            stim1 = reorder_cues[0]
        elif target == 2:
            stim1 = reorder_cues[1]
        elif target == 5:
            stim1 = reorder_cues[4]
        elif target == 6:
            stim1 = reorder_cues[5]
    CodeComponent distractor_presentation_test2_subtle
      Code Type = Auto->JS
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      Begin Routine:
        if distractor_test2 == 1:
            distractor = reorder_subtle[0]
        elif distractor_test2 == 2:
            distractor = reorder_subtle[1]
        elif distractor_test2 == 5:
            distractor = reorder_subtle[4]
        elif distractor_test2 == 6:
            distractor = reorder_subtle[5]
    TextComponent blank_test2_subtle
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent target_test2_subtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_test2_subtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_test2_subtle
      clickable = target_test2_subtle, distractor_test2_subtle
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine test2_subtle_rate
    TextComponent slider_text_test2_subtle
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident are you of your response?
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    SliderComponent slider_test2_subtle
      borderColor = white
      color = white
      font = Trebuchet MS
      forceEndRoutine = False
      granularity = 0.5
      initVal = 5.5
      labels = "I am guessing", "I am certain"
      letterHeight = 0.028
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent slider_target_test2_subtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent slider_distractor_test2_subtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
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    CodeComponent show_continue_rate_test2_subtle
      Code Type = Auto->JS
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      Begin Routine:
        show_continue_test2_subtle = False
      Each Frame:
        slid = slider_test2_subtle.getRating()

        if slid is not None:
            show_continue_test2_subtle = True
    TextboxComponent continue_rate_test2_subtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = show_continue_test2_subtle
      text = CONTINUE
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    MouseComponent mouse_continue_test2_subtle
      clickable = continue_rate_test2_subtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test1_nosubtle_inst
    TextboxComponent cont_test1_nosubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_mouse_test1_nosubtle
      clickable = cont_test1_nosubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent instructions_test1_nosubtle
      image [set every repeat] = $task2
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine test1_nosubtle_rate
    TextComponent slider_text_test1_nosubtle
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident are you of your response?
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    SliderComponent slider_test1_nosubtle
      borderColor = white
      color = white
      font = Trebuchet MS
      forceEndRoutine = False
      granularity = 0.5
      initVal = 5.5
      labels = "I am guessing", "I am certain"
      letterHeight = 0.028
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent slider_target_test1_nosubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent slider_distractor_test1_nosubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent show_continue_rate_test1_nosubtle
      Code Type = Auto->JS
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      Begin Routine:
        show_continue_test1_nosubtle = False
      Each Frame:
        slid = slider_test1_nosubtle.getRating()

        if slid is not None:
            show_continue_test1_nosubtle = True
    TextboxComponent continue_rate_test1_nosubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = show_continue_test1_nosubtle
      text = CONTINUE
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    MouseComponent mouse_continue_test1_nosubtle
      clickable = continue_rate_test1_nosubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test1_nosubtle_choice
    CodeComponent target_determination_test1_nosubtle
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            stim1 = reorder_cues[0]
        elif target == 2:
            stim1 = reorder_cues[1]
        elif target == 5:
            stim1 = reorder_cues[4]
        elif target == 6:
            stim1 = reorder_cues[5]
    CodeComponent distractor_presentation_test1_nosubtle
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            distractor = reorder_nosubtle[0]
        elif target == 2:
            distractor = reorder_nosubtle[1]
        elif target == 5:
            distractor = reorder_nosubtle[4]
        elif target == 6:
            distractor = reorder_nosubtle[5]
    TextComponent blank_test1_nosubtle
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent target_test1_nosubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_test1_nosubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_test1_nosubtle
      clickable = target_test1_nosubtle, distractor_test1_nosubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine test2_nosubtle_inst
    TextboxComponent cont_test2_nosubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_mouse_test2_nosubtle
      clickable = cont_test2_nosubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent instructions_test2_nosubtle
      image [set every repeat] = $task3
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine test2_nosubtle_choice
    CodeComponent target_determination_test2_nosubtle
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            stim1 = reorder_cues[0]
        elif target == 2:
            stim1 = reorder_cues[1]
        elif target == 5:
            stim1 = reorder_cues[4]
        elif target == 6:
            stim1 = reorder_cues[5]
    CodeComponent distractor_presentation_test2_nosubtle
      Code Type = Auto->JS
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      Begin Routine:
        if distractor_test2 == 1:
            distractor = reorder_nosubtle[0]
        elif distractor_test2 == 2:
            distractor = reorder_nosubtle[1]
        elif distractor_test2 == 5:
            distractor = reorder_nosubtle[4]
        elif distractor_test2 == 6:
            distractor = reorder_nosubtle[5]
    TextComponent blank_test2_nosubtle
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent target_test2_nosubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_test2_nosubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_test2_nosubtle
      clickable = target_test2_nosubtle, distractor_test2_nosubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine test2_nosubtle_rate
    TextComponent slider_text_test2_nosubtle
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident are you of your response?
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    SliderComponent slider_test2_nosubtle
      borderColor = white
      color = white
      font = Trebuchet MS
      forceEndRoutine = False
      granularity = 0.5
      initVal = 5.5
      labels = "I am guessing", "I am certain"
      letterHeight = 0.028
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent slider_target_test2_nosubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent slider_distractor_test2_nosubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
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    CodeComponent show_continue_rate_test2_nosubtle
      Code Type = Auto->JS
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      Begin Routine:
        show_continue_test2_nosubtle = False
      Each Frame:
        slid = slider_test2_nosubtle.getRating()

        if slid is not None:
            show_continue_test2_nosubtle = True
    TextboxComponent continue_rate_test2_nosubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = show_continue_test2_nosubtle
      text = CONTINUE
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    MouseComponent mouse_continue_test2_nosubtle
      clickable = continue_rate_test2_nosubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_1
    TextboxComponent cont_train_instr
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_train_instr_mouse
      clickable = cont_train_instr
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent train_instructions
      image [set every repeat] = $task1
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine instructions_2
    TextboxComponent cont_train_instr_2
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_train_instr_mouse_2
      clickable = cont_train_instr_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent train_instructions_2
      image [set every repeat] = $task1
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine comprehension1
    CodeComponent comprehension_code
      Code Type = Auto->JS
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      End Routine:
        if comp1_mouse.clicked_name[0] == 'comp1_resp1':
            try_again = 0
            compr1_continue = 1
            no_compr = 0
        else:
            try_again = 1
    TextboxComponent comp1_resp1
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.2)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Learn which mutant would result of each chemicals combination
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    TextboxComponent comp1_resp2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.26)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Predict which mutant would take over the world
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    TextboxComponent comp1_resp3
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.32)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Decide if the chemicals are organic or inorganic
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    MouseComponent comp1_mouse
      clickable = comp1_resp1, comp1_resp2, comp1_resp3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent check1
      image = instructions/check1.png
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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  Routine comprehension1_2
    CodeComponent comprehension_code_2
      Code Type = Auto->JS
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      End Routine:
        if comp1_mouse_2.clicked_name[0] == 'comp1_resp1_2':
            compr1_continue = 1
            no_compr = 0
        else:
            compr1_continue = 0
            no_compr = 1
    TextboxComponent comp1_resp1_2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.2)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Learn which mutant would result of each chemicals combination
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    TextboxComponent comp1_resp2_2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.26)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Predict which mutant would take over the world
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    TextboxComponent comp1_resp3_2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.32)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Decide if the chemicals are organic or inorganic
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    MouseComponent comp1_mouse_2
      clickable = comp1_resp1_2, comp1_resp2_2, comp1_resp3_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent check1_2
      image = instructions/check1_2.png
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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  Routine no_comprehension
    TextboxComponent no_compr_textbox
      autoLog = False
      bold = True
      editable = False
      font = Trebuchet MS
      letterHeight = 0.03
      saveStartStop = False
      size = (0.65, 0.5)
      startVal [time (s)] = 0
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      text:
        You did not pass the comprehension check.
        Please, click the button below to leave the experiment and return the experiment clicking 'Stop Without Completing' on Prolific.
    TextboxComponent exit_box_no_compr
      autoLog = False
      bold = True
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0
      text = EXIT
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    MouseComponent mouse_exit_no_compr
      clickable = exit_box_no_compr
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0
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  Routine comprehension2
    TextboxComponent comp2_resp2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.2)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Click on the mutant that would result of each chemicals combination
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    TextboxComponent comp2_resp1
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.26)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Select the chemical you have seen before
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    TextboxComponent comp2_resp3
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.32)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Rate how beautiful the chemicals presented are
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    MouseComponent comp2_mouse
      clickable = comp2_resp1, comp2_resp2, comp2_resp3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent check2
      image = instructions/check2.png
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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  Routine comprehension3
    TextboxComponent comp3_resp2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.2)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Click on the mutant that would result of each chemicals combination
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    TextboxComponent comp3_resp1
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.26)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Select the chemical you have seen in Task 1
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    TextboxComponent comp3_resp3
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.32)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Rate how beautiful the chemicals presented are
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    MouseComponent comp3_mouse
      clickable = comp3_resp1, comp3_resp2, comp3_resp3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent check3
      image = instructions/check3.png
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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Flow
  Routine counterbalance
  LoopInitiator information_loop loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'information': 'instructions/info1.png'},
      {'information': 'instructions/info2.png'},
      {'information': 'instructions/info3.png'}]
    Routine information
  LoopTerminator information_loop
  Routine consent
  LoopInitiator consent_loop loopType="TrialHandler"
    loopType = random
    nReps = consent
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    LoopInitiator task1_instr loopType="TrialHandler"
      conditionsFile = task1_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'task1': 'instructions/task1_1.png'},
        {'task1': 'instructions/task1_2.png'},
        {'task1': 'instructions/task1_3.png'}]
      Routine instructions_1
    LoopTerminator task1_instr
    Routine comprehension1
    LoopInitiator comp1_loop loopType="TrialHandler"
      loopType = random
      nReps = try_again
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      LoopInitiator task1_instr_again loopType="TrialHandler"
        conditionsFile = task1_instructions.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'task1': 'instructions/task1_1.png'},
          {'task1': 'instructions/task1_2.png'},
          {'task1': 'instructions/task1_3.png'}]
        Routine instructions_1
      LoopTerminator task1_instr_again
      Routine comprehension1_2
    LoopTerminator comp1_loop
    LoopInitiator compr1_completed loopType="TrialHandler"
      loopType = sequential
      nReps = compr1_continue
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      LoopInitiator training_trials loopType="TrialHandler"
        conditionsFile = training.xlsx
        loopType = random
        nReps = 4
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        conditions:
          [{'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'correct_out': 'stimuli/out1.png', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'correct_out': 'stimuli/out1.png', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'correct_out': 'stimuli/out1.png', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'correct_out': 'stimuli/out1.png', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'correct_out': 'stimuli/out1.png', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'correct_out': 'stimuli/out1.png', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'correct_out': 'stimuli/out1.png', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'correct_out': 'stimuli/out1.png', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1}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
        Routine cue_o__trial
        LoopInitiator feedback_loop loopType="TrialHandler"
          loopType = random
          nReps = feedback_reps
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          Routine cue_selection
          Routine feedback
        LoopTerminator feedback_loop
      LoopTerminator training_trials
      LoopInitiator vsubtle_loop loopType="TrialHandler"
        loopType = random
        nReps = 0
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        LoopInitiator task2_instr_vsubtle loopType="TrialHandler"
          conditionsFile = task2_instructions.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'task2': 'instructions/task2_1.png'},
            {'task2': 'instructions/task2_2.png'}]
          Routine test1_vsubtle_inst
        LoopTerminator task2_instr_vsubtle
        Routine comprehension2
        LoopInitiator test1_vsubtle_trials loopType="TrialHandler"
          conditionsFile = test1_trials.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'target': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 5, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 6, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 5, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 6, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]}]
          Routine test1_vsubtle_choice
          Routine test1_vsubtle_rate
        LoopTerminator test1_vsubtle_trials
        LoopInitiator task3_instr_vsubtle loopType="TrialHandler"
          conditionsFile = task3_instructions.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'task3': 'instructions/task3_1.png'},
            {'task3': 'instructions/task3_2.png'}]
          Routine test2_vsubtle_inst
        LoopTerminator task3_instr_vsubtle
        Routine comprehension3
        LoopInitiator test2_vsubtle_trials loopType="TrialHandler"
          conditionsFile = test2_trials.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'target': 1, 'distractor': 2, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2], 'distractor1_opacity': 0, 'distractor2_opacity': 1, 'distractor3_opacity': 0, 'distractor4_opacity': 0},
            {'target': 1, 'distractor': 3, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2], 'distractor1_opacity': 0, 'distractor2_opacity': 0, 'distractor3_opacity': 1, 'distractor4_opacity': 0},
            {'target': 1, 'distractor': 4, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2], 'distractor1_opacity': 0, 'distractor2_opacity': 0, 'distractor3_opacity': 0, 'distractor4_opacity': 1},
            {'target': 1, 'distractor': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2], 'distractor1_opacity': 0, 'distractor2_opacity': 1, 'distractor3_opacity': 0, 'distractor4_opacity': 0},
            {'target': 1, 'distractor': 3, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2], 'distractor1_opacity': 0, 'distractor2_opacity': 0, 'distractor3_opacity': 1, 'distractor4_opacity': 0},
            {'target': 1, 'distractor': 4, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2], 'distractor1_opacity': 0, 'distractor2_opacity': 0, 'distractor3_opacity': 0, 'distractor4_opacity': 1},
            {'target': 2, 'distractor': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2], 'distractor1_opacity': 1, 'distractor2_opacity': 0, 'distractor3_opacity': 0, 'distractor4_opacity': 0}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
          Routine test2_vsubtle_choice
          Routine test2_vsubtle_rate
        LoopTerminator test2_vsubtle_trials
      LoopTerminator vsubtle_loop
      LoopInitiator subtle_loop loopType="TrialHandler"
        loopType = random
        nReps = 1
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        LoopInitiator task2_instr_subtle loopType="TrialHandler"
          conditionsFile = task2_instructions.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'task2': 'instructions/task2_1.png'},
            {'task2': 'instructions/task2_2.png'}]
          Routine test1_subtle_inst
        LoopTerminator task2_instr_subtle
        Routine comprehension2
        LoopInitiator test1_subtle_trials loopType="TrialHandler"
          conditionsFile = test1_trials.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'target': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 5, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 6, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 5, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 6, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]}]
          Routine test1_subtle_choice
          Routine test1_subtle_rate
        LoopTerminator test1_subtle_trials
        LoopInitiator task3_instr_subtle loopType="TrialHandler"
          conditionsFile = task3_instructions.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'task3': 'instructions/task3_1.png'},
            {'task3': 'instructions/task3_2.png'}]
          Routine test2_subtle_inst
        LoopTerminator task3_instr_subtle
        Routine comprehension3
        LoopInitiator test2_subtle_trials loopType="TrialHandler"
          conditionsFile = test2_trials.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'target': 1, 'distractor_test2': 2, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 5, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 1, 'distractor_test2': 6, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 1, 'distractor_test2': 5, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 6, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 5, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 6, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 1, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 5, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 6, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 5, 'distractor_test2': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 5, 'distractor_test2': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]}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
          Routine test2_subtle_choice
          Routine test2_subtle_rate
        LoopTerminator test2_subtle_trials
      LoopTerminator subtle_loop
      LoopInitiator nosubtle_loop loopType="TrialHandler"
        loopType = random
        nReps = 0
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        LoopInitiator task2_instr_nosubtle loopType="TrialHandler"
          conditionsFile = task2_instructions.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'task2': 'instructions/task2_1.png'},
            {'task2': 'instructions/task2_2.png'}]
          Routine test1_nosubtle_inst
        LoopTerminator task2_instr_nosubtle
        Routine comprehension2
        LoopInitiator test1_nosubtle_trials loopType="TrialHandler"
          conditionsFile = test1_trials.xlsx
          loopType = random
          nReps = 1
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          conditions:
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          Routine test1_nosubtle_choice
          Routine test1_nosubtle_rate
        LoopTerminator test1_nosubtle_trials
        LoopInitiator task3_instr_nosubtle loopType="TrialHandler"
          conditionsFile = task3_instructions.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'task3': 'instructions/task3_1.png'},
            {'task3': 'instructions/task3_2.png'}]
          Routine test2_nosubtle_inst
        LoopTerminator task3_instr_nosubtle
        Routine comprehension3
        LoopInitiator test2_nosubtle_trials loopType="TrialHandler"
          conditionsFile = test2_trials.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'target': 1, 'distractor_test2': 2, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 5, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 1, 'distractor_test2': 6, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 1, 'distractor_test2': 5, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 6, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 5, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 6, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 1, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 5, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 6, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 5, 'distractor_test2': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 5, 'distractor_test2': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]}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
          Routine test2_nosubtle_choice
          Routine test2_nosubtle_rate
        LoopTerminator test2_nosubtle_trials
      LoopTerminator nosubtle_loop
      LoopInitiator debrief_loop loopType="TrialHandler"
        conditionsFile = debrief.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'debrief_img': 'instructions/debrief1.png'},
          {'debrief_img': 'instructions/debrief2.png'},
          {'debrief_img': 'instructions/debrief3.png'}]
        Routine debrief
      LoopTerminator debrief_loop
    LoopTerminator compr1_completed
    LoopInitiator no_compr_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = no_compr
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      Routine no_comprehension
    LoopTerminator no_compr_loop
  LoopTerminator consent_loop
  LoopInitiator no_consent_loop loopType="TrialHandler"
    loopType = random
    nReps = no_consent
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    Routine no_consent_trial
  LoopTerminator no_consent_loop
