PsychoPy2experiment version="2024.1.1"
Settings
  Completed URL = https://app.prolific.com/submissions/complete?cc=C1FGHRA9
  Data file delimiter = comma
  Experiment info = {'participant': '', 'age': '', 'gender': '["male","female", "non-binary", "other"]', 'condition': 'f"{randint(1, 4)}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/correct_out1.png', 'stimuli/correct_out2.png', 'stimuli/cue_a1.png', 'stimuli/cue_a2.png', 'stimuli/cue_a3.png', 'stimuli/cue_a4.png', 'stimuli/cue_a5.png', 'stimuli/cue_a6.png', 'stimuli/cue_a7.png', 'stimuli/cue_a8.png', 'stimuli/cue_b1.png', 'stimuli/cue_b2.png', 'stimuli/cue_b3.png', 'stimuli/cue_b4.png', 'stimuli/cue_b5.png', 'stimuli/cue_b6.png', 'stimuli/cue_b7.png', 'stimuli/cue_b8.png', 'stimuli/out1.png', 'stimuli/out2.png', 'stimuli/yellow_frame.png', 'instructions/check1.png', 'instructions/check1_2.png', 'instructions/check3.png', 'instructions/debrief1.png', 'instructions/debrief2.png', 'instructions/debrief3.png', 'instructions/info1.png', 'instructions/info2.png', 'instructions/info3.png', 'instructions/task1_1.png', 'instructions/task1_2.png', 'instructions/task1_3.png', 'instructions/task3.png', 'instructions/task3_1.png', 'instructions/task3_2.png', 'debrief.xlsx', 'info.xlsx', 'stage1_certain.xlsx', 'stage2_certain.xlsx', 'stage2_uncertain.xlsx', 'task1_instructions.xlsx', 'task3_instructions.xlsx', 'test2.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = UNM08
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine cue_o__trial
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    CodeComponent cue_random
      Code Type = Auto->JS
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      Begin Experiment:
        cues = ["stimuli/cue_a1.png", "stimuli/cue_a2.png", "stimuli/cue_a3.png", "stimuli/cue_a4.png", "stimuli/cue_a5.png", "stimuli/cue_a6.png", "stimuli/cue_a7.png", "stimuli/cue_a8.png"]
        distractors_vsubtle = ["stimuli/cue_b1.png", "stimuli/cue_b2.png", "stimuli/cue_b3.png", "stimuli/cue_b4.png", "stimuli/cue_b5.png", "stimuli/cue_b6.png", "stimuli/cue_b7.png", "stimuli/cue_b8.png"]
        order = [1, 2, 3, 4, 5, 6, 7, 8]
        shuffle (order)

        reorder_cues = [cues[i-1] for i in order]
        reorder_vsubtle = [distractors_vsubtle[i-1] for i in order]
      Begin Routine:
        if cue1 == "A":
            stim1 = reorder_cues[0]
        elif cue1 == "B":
            stim1 = reorder_cues[1]
        elif cue1 == "C":
            stim1 = reorder_cues[2]
        elif cue1 == "D":
            stim1 = reorder_cues[3]

        if cue2 == "X":
            stim2 = reorder_cues[4]
        elif cue2 == "Y":
            stim2 = reorder_cues[5]
        elif cue2 == "W":
            stim2 = reorder_cues[6]
        elif cue2 == "Z":
            stim2 = reorder_cues[7]
      End Routine:
        thisExp.addData("order", order)
    CodeComponent position
      Code Type = Auto->JS
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      Begin Routine:
        left_cue_pos = (-0.3, 0.2)
        right_cue_pos = (0.3, 0.2)
        left_out_pos = (-0.125, -0.2)
        right_out_pos = (0.125, -0.2)
        cue_positions = [left_cue_pos, right_cue_pos]
        out_positions = [left_out_pos, right_out_pos]
        shuffle(cue_positions)
        shuffle(out_positions)
      End Routine:
        thisExp.addData ('cue_order', cue_positions)
        thisExp.addData ('out_order', out_positions)
    TextComponent blank_training
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent predictive_cue
      image [set every repeat] = $stim1
      pos [set every repeat] = cue_positions[0]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    ImageComponent non_predictive_cue
      image [set every repeat] = $stim2
      pos [set every repeat] = cue_positions[1]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    ImageComponent o1_image
      image [set every repeat] = stimuli/out1.png
      pos [set every repeat] = out_positions[0]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    ImageComponent o2_image
      image [set every repeat] = stimuli/out2.png
      pos [set every repeat] = out_positions[1]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    MouseComponent cue_o_mouse
      clickable = o1_image, o2_image
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
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    CodeComponent correct_click
      Code Type = Auto->JS
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      Begin Routine:
        msg = '888'
        correct = 99
    CodeComponent timeout_code
      Code Type = Auto->JS
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      End Routine:
        if cue_o_mouse.isPressedIn(o1_image) or cue_o_mouse.isPressedIn(o2_image):
            feedback_reps = 1
        else:
            feedback_reps = 0
    TextComponent timeout_text
      color = red
      font = Trebuchet MS
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 1.0
      text = TIMEOUT - TOO SLOW
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  Routine information
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    TextboxComponent continue_info
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent mouse_info
      clickable = continue_info
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image_info
      image [set every repeat] = $information
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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  Routine consent
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    TextboxComponent c1
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, 0.35)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I agree to participate in the study on learning the predictive value of cues as described. I understand that my responses will be treated confidentially and that I have the option to withdraw from the study.
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    TextboxComponent c2
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, 0.20)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I understand my participation is completely voluntary.
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    TextboxComponent c3
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, 0.05)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I understand I have the right to withdraw from the study at any time during or at the end of the study without giving a reason and with no adverse consequences.
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    TextboxComponent c4
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, -0.125)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I have been given full information about what the study entails.
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    TextboxComponent c5
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, -0.25)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I have been given contact information for the research team.
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    TextboxComponent c6
      autoLog = False
      bold = False
      editable = False
      font = Trebuchet MS
      letterHeight = 0.028
      pos = (-0.2, -0.35)
      saveStartStop = False
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
      text = I understand my responses will be fully anonymized.
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    SliderComponent slider_1
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, 0.35)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, 0.2)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, 0.05)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, -0.125)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_5
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, -0.25)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    SliderComponent slider_6
      forceEndRoutine = False
      granularity = 1
      labels = 'Yes', 'No'
      letterHeight = 0.025
      pos = (0.37, -0.35)
      saveStartStop = False
      size = (0.065, 0.02)
      startVal [time (s)] = 0
      storeRatingTime = False
      styles = radio
      ticks = (1,2)
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    CodeComponent show_consent_code
      Code Type = Auto->JS
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      Begin Routine:
        show_consent = False
      Each Frame:
        s1 = slider_1.getRating()
        s2 = slider_2.getRating()
        s3 = slider_3.getRating()
        s4 = slider_4.getRating()
        s5 = slider_5.getRating()
        s6 = slider_6.getRating()

        if s1:
            if s2:
                if s3:
                    if s4:
                        if s5:
                            if s6:
                                show_consent = True
    MouseComponent mouse_consent
      clickable = consent_box
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = $show_consent
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    TextboxComponent consent_box
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = $show_consent
      text = CONTINUE
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    CodeComponent consent_code
      Code Type = Auto->JS
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      Begin Routine:
        consent = 0
      End Routine:
        res1 = slider_1.getRating()
        res2 = slider_2.getRating()
        res3 = slider_3.getRating()
        res4 = slider_4.getRating()
        res5 = slider_5.getRating()
        res6 = slider_6.getRating()

        if res1 == 'Yes':
            if res2 == 'Yes':
                if res3 == 'Yes':
                    if res4 == 'Yes':
                        if res5 == 'Yes':
                            if res6 == 'Yes':
                                consent = 1
                                no_consent = 0
                            else:
                                consent = 0
                                no_consent = 1
                        else:
                            consent = 0
                            no_consent = 1
                    else:
                        consent = 0
                        no_consent = 1
                else:
                    consent = 0
                    no_consent = 1
            else:
                consent = 0
                no_consent = 1
        else:
            consent = 0
            no_consent = 1
  Routine no_consent_trial
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    TextboxComponent no_consent_textbox
      autoLog = False
      bold = True
      editable = False
      font = Trebuchet MS
      letterHeight = 0.03
      saveStartStop = False
      size = (0.65, 0.5)
      startVal [time (s)] = 0
      text = Thank you for considering our study. You did not consent to participate.
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    TextboxComponent exit_box
      autoLog = False
      bold = True
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0
      text = EXIT
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    MouseComponent mouse_exit
      clickable = exit_box
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0
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  Routine debrief
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    TextboxComponent cont_debrief
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_debrief_mouse
      clickable = cont_debrief
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent debrief_image
      image [set every repeat] = $debrief_img
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if correct == 1:
            msg = 'CORRECT!'
            msg_color = [-1.0000, 1.0000, -1.0000]
        else:
            msg = 'INCORRECT!'
            msg_color = 'red'   #[1.0000, -1.0000, -1.0000]
    TextComponent feedback_text
      color [set every repeat] = $msg_color
      font = Trebuchet MS
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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    ImageComponent predictive_cue_feedback
      image [set every repeat] = $stim1
      pos [set every repeat] = cue_positions[0]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent non_predictive_cue_feedback
      image [set every repeat] = $stim2
      pos [set every repeat] = cue_positions[1]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent o1_image_feedback
      image [set every repeat] = $o1_feedback
      pos [set every repeat] = out_positions[0]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ImageComponent o2_image_feedback
      image [set every repeat] = $o2_feedback
      pos [set every repeat] = out_positions[1]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine cue_selection
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    CodeComponent clicked_outcome
      Code Type = Auto->JS
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      Begin Routine:
        if cue_o_mouse.clicked_name[0] == 'o1_image':
            yellow_frame_position = out_positions[0]
        else:
            yellow_frame_position = out_positions[1]

        if cue_o_mouse.clicked_name[0] == outcome:
            correct = 1
        else:
            correct = 0

        thisExp.addData('correct_answer', correct)
    ImageComponent predictive_cue_selection
      image [set every repeat] = $stim1
      pos [set every repeat] = cue_positions[0]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent non_predictive_cue_selection
      image [set every repeat] = $stim2
      pos [set every repeat] = cue_positions[1]
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent o1_image_selection
      image [set every repeat] = stimuli/out1.png
      pos [set every repeat] = out_positions[0]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent o2_image_selection
      image [set every repeat] = stimuli/out2.png
      pos [set every repeat] = out_positions[1]
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent yellow_frame
      image = stimuli/yellow_frame.png
      pos [set every repeat] = yellow_frame_position
      saveStartStop = False
      size = (0.16, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine counterbalance
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    CodeComponent no_mobile_devices
      Code Type = JS
      Begin JS Experiment:
        if( /Android|webOS|iPhone|iPad|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
          quitPsychoJS('Mobile device detected. Goodbye!', false)
        }
    CodeComponent counterbalance_2
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['condition']) == 1:
            stage2File = "stage2_certain.xlsx"
            stage2Reps = 4
        elif int(expInfo['condition']) == 2:
            stage2File = "stage2_uncertain.xlsx"
            stage2Reps = 4
        elif int(expInfo['condition']) == 3:
            stage2File = "stage2_uncertain.xlsx"
            stage2Reps = 0
  Routine test2_vsubtle_inst
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    TextboxComponent cont_test2_vsubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_mouse_test2_vsubtle
      clickable = cont_test2_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent instructions_test2_vsubtle
      image [set every repeat] = $task3
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine test2_vsubtle_choice
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    CodeComponent target_determination_2
      Code Type = Auto->JS
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      Begin Routine:
        if target == 1:
            stim1 = reorder_cues[0]
        elif target == 2:
            stim1 = reorder_cues[1]
        elif target == 3:
            stim1 = reorder_cues[2]
        elif target == 4:
            stim1 = reorder_cues[3]
        elif target == 5:
            stim1 = reorder_cues[4]
        elif target == 6:
            stim1 = reorder_cues[5]
        elif target == 7:
            stim1 = reorder_cues[6]
        elif target == 8:
            stim1 = reorder_cues[7]
    CodeComponent distractor_presentation_test2_vsubtle
      Code Type = Auto->JS
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      Begin Routine:
        if distractor_test2 == 1:
            distractor = reorder_vsubtle[0]
        elif distractor_test2 == 2:
            distractor = reorder_vsubtle[1]
        elif distractor_test2 == 3:
            distractor = reorder_vsubtle[2]
        elif distractor_test2 == 4:
            distractor = reorder_vsubtle[3]
        elif distractor_test2 == 5:
            distractor = reorder_vsubtle[4]
        elif distractor_test2 == 6:
            distractor = reorder_vsubtle[5]
        elif distractor_test2 == 7:
            distractor = reorder_vsubtle[6]
        elif distractor_test2 == 8:
            distractor = reorder_vsubtle[7]
    TextComponent blank_test2_vsubtle
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent target_test2_vsubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_test2_vsubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_test2_vsubtle
      clickable = target_test2_vsubtle, distractor_test2_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine test2_vsubtle_rate
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    TextComponent slider_text_test2_vsubtle
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident are you of your response?
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    SliderComponent slider_test2_vsubtle
      borderColor = white
      color = white
      font = Trebuchet MS
      forceEndRoutine = False
      granularity = 0.5
      initVal = 5.5
      labels = "I am guessing", "I am certain"
      letterHeight = 0.028
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent slider_target_test2_vsubtle
      image [set every repeat] = $stim1
      pos [set every repeat] = target_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent slider_distractor_test2_vsubtle
      image [set every repeat] = $distractor
      pos [set every repeat] = distractor_position
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0
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    CodeComponent show_continue_rate_test2_vsubtle
      Code Type = Auto->JS
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      Begin Routine:
        show_continue_test2_vsubtle = False
      Each Frame:
        slid2 = slider_test2_vsubtle.getRating()

        if slid2:
            show_continue_test2_vsubtle = True
        else:
            show_continue_test2_vsubtle = False
    TextboxComponent continue_rate_test2_vsubtle
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [condition] = $show_continue_test2_vsubtle
      text = CONTINUE
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    MouseComponent mouse_continue_test2_vsubtle
      clickable = continue_rate_test2_vsubtle
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = $show_continue_test2_vsubtle
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  Routine instructions_1
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    TextboxComponent cont_train_instr
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_train_instr_mouse
      clickable = cont_train_instr
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent train_instructions
      image [set every repeat] = $task1
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine instructions_2
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    TextboxComponent cont_train_instr_2
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      fillColor = darkgrey
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0.0
      text = CONTINUE
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    MouseComponent cont_train_instr_mouse_2
      clickable = cont_train_instr_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent train_instructions_2
      image [set every repeat] = $task1
      saveStartStop = False
      size = (1.4, 0.75)
      startVal [time (s)] = 0.0
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  Routine comprehension1
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    CodeComponent comprehension_code
      Code Type = Auto->JS
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      End Routine:
        if comp1_mouse.clicked_name[0] == 'comp1_resp1':
            try_again = 0
            compr1_continue = 1
            no_compr = 0
        else:
            try_again = 1
    TextboxComponent comp1_resp1
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.2)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Learn which mutant would result of each chemicals combination
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    TextboxComponent comp1_resp2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.26)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Predict which mutant would take over the world
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    TextboxComponent comp1_resp3
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.32)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Decide if the chemicals are organic or inorganic
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    MouseComponent comp1_mouse
      clickable = comp1_resp1, comp1_resp2, comp1_resp3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent check1
      image = instructions/check1.png
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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  Routine comprehension1_2
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    CodeComponent comprehension_code_2
      Code Type = Auto->JS
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      End Routine:
        if comp1_mouse_2.clicked_name[0] == 'comp1_resp1_2':
            compr1_continue = 1
            no_compr = 0
        else:
            compr1_continue = 0
            no_compr = 1
    TextboxComponent comp1_resp1_2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.2)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Learn which mutant would result of each chemicals combination
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    TextboxComponent comp1_resp2_2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.26)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Predict which mutant would take over the world
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    TextboxComponent comp1_resp3_2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.32)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Decide if the chemicals are organic or inorganic
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    MouseComponent comp1_mouse_2
      clickable = comp1_resp1_2, comp1_resp2_2, comp1_resp3_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent check1_2
      image = instructions/check1_2.png
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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  Routine no_comprehension
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    TextboxComponent no_compr_textbox
      autoLog = False
      bold = True
      editable = False
      font = Trebuchet MS
      letterHeight = 0.03
      saveStartStop = False
      size = (0.65, 0.5)
      startVal [time (s)] = 0
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      text:
        You did not pass the comprehension check.
        Please, click the button below to leave the experiment and return the experiment clicking 'Stop Without Completing' on Prolific.
    TextboxComponent exit_box_no_compr
      autoLog = False
      bold = True
      borderColor = white
      editable = False
      fillColor = darkgrey
      font = Trebuchet MS
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0
      text = EXIT
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    MouseComponent mouse_exit_no_compr
      clickable = exit_box_no_compr
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0
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  Routine comprehension3
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    TextboxComponent comp3_resp2
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.2)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Click on the mutant that would result of each chemicals combination
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    TextboxComponent comp3_resp1
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.26)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Select the chemical you have seen in Task 1
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    TextboxComponent comp3_resp3
      anchor = center-left
      autoLog = False
      bold = False
      borderColor = white
      editable = False
      font = Trebuchet MS
      letterHeight = 0.035
      pos = (-0.71, -0.32)
      saveStartStop = False
      size = (1.5, 0.05)
      startVal [time (s)] = 0.0
      text = Rate how beautiful the chemicals presented are
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    MouseComponent comp3_mouse
      clickable = comp3_resp1, comp3_resp2, comp3_resp3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent check3
      image = instructions/check3.png
      saveStartStop = False
      size = (1.45, 0.75)
      startVal [time (s)] = 0.0
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Flow
  Routine counterbalance
  LoopInitiator information_loop loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'information': 'instructions/info1.png'},
      {'information': 'instructions/info2.png'},
      {'information': 'instructions/info3.png'}]
    Routine information
  LoopTerminator information_loop
  Routine consent
  LoopInitiator consent_loop loopType="TrialHandler"
    loopType = random
    nReps = consent
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    LoopInitiator task1_instr loopType="TrialHandler"
      conditionsFile = task1_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'task1': 'instructions/task1_1.png'},
        {'task1': 'instructions/task1_2.png'},
        {'task1': 'instructions/task1_3.png'}]
      Routine instructions_1
    LoopTerminator task1_instr
    Routine comprehension1
    LoopInitiator comp1_loop loopType="TrialHandler"
      loopType = random
      nReps = try_again
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      LoopInitiator task1_instr_again loopType="TrialHandler"
        conditionsFile = task1_instructions.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'task1': 'instructions/task1_1.png'},
          {'task1': 'instructions/task1_2.png'},
          {'task1': 'instructions/task1_3.png'}]
        Routine instructions_1
      LoopTerminator task1_instr_again
      Routine comprehension1_2
    LoopTerminator comp1_loop
    LoopInitiator compr1_completed loopType="TrialHandler"
      loopType = sequential
      nReps = compr1_continue
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      LoopInitiator stage1_trials loopType="TrialHandler"
        conditionsFile = stage1_certain.xlsx
        loopType = random
        nReps = 6
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        conditions:
          [{'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 5, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 1, 'cue2': 6, 'outcome': 'o1_image', 'o1_feedback': 'stimuli/correct_out1.png', 'o2_feedback': 'stimuli/out2.png', 'cert': 1},
          {'cue1': 2, 'cue2': 5, 'outcome': 'o2_image', 'o1_feedback': 'stimuli/out1.png', 'o2_feedback': 'stimuli/correct_out2.png', 'cert': 1}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
        Routine cue_o__trial
        LoopInitiator feedback_loop loopType="TrialHandler"
          loopType = random
          nReps = feedback_reps
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          Routine cue_selection
          Routine feedback
        LoopTerminator feedback_loop
      LoopTerminator stage1_trials
      LoopInitiator stage2_trials loopType="TrialHandler"
        conditionsFile = $stage2File
        loopType = random
        nReps = stage2Reps
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        Routine cue_o__trial
        LoopInitiator stage2_feedback_loop loopType="TrialHandler"
          loopType = random
          nReps = feedback_reps
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          Routine cue_selection
          Routine feedback
        LoopTerminator stage2_feedback_loop
      LoopTerminator stage2_trials
      LoopInitiator vsubtle_loop loopType="TrialHandler"
        loopType = random
        nReps = 1
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        LoopInitiator task3_instr_vsubtle loopType="TrialHandler"
          conditionsFile = task3_instructions.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'task3': 'instructions/task3_1.png'},
            {'task3': 'instructions/task3_2.png'}]
          Routine test2_vsubtle_inst
        LoopTerminator task3_instr_vsubtle
        Routine comprehension3
        LoopInitiator test2_vsubtle_trials loopType="TrialHandler"
          conditionsFile = test2.xlsx
          loopType = random
          nReps = 1
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          conditions:
            [{'target': 1, 'distractor_test2': 2, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 5, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 1, 'distractor_test2': 6, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 1, 'distractor_test2': 5, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 1, 'distractor_test2': 6, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 5, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 6, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 1, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 2, 'distractor_test2': 5, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 2, 'distractor_test2': 6, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]},
            {'target': 5, 'distractor_test2': 1, 'target_position': [0.3, 0.2], 'distractor_position': [-0.3, 0.2]},
            {'target': 5, 'distractor_test2': 2, 'target_position': [-0.3, 0.2], 'distractor_position': [0.3, 0.2]}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
          Routine test2_vsubtle_choice
          Routine test2_vsubtle_rate
        LoopTerminator test2_vsubtle_trials
      LoopTerminator vsubtle_loop
      LoopInitiator debrief_loop loopType="TrialHandler"
        conditionsFile = debrief.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'debrief_img': 'instructions/debrief1.png'},
          {'debrief_img': 'instructions/debrief2.png'},
          {'debrief_img': 'instructions/debrief3.png'}]
        Routine debrief
      LoopTerminator debrief_loop
    LoopTerminator compr1_completed
    LoopInitiator no_compr_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = no_compr
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      Routine no_comprehension
    LoopTerminator no_compr_loop
  LoopTerminator consent_loop
  LoopInitiator no_consent_loop loopType="TrialHandler"
    loopType = random
    nReps = no_consent
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    Routine no_consent_trial
  LoopTerminator no_consent_loop
